---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title "AACT interpret A v.2.0.3"
set subject_parity even
set subject_nr 0
set start task_sequence
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "5c9380d1-874c-27f5-e0bc-91fb61e88e77"
set height 768
set fullscreen no
set form_clicks no
set foreground "#ffffff"
set font_underline no
set font_size 26
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\hambe824\\OneDrive - Uppsala universitet\\ECAN Lab\\Measures\\Experiments\\approach-avoidance conflict task (AACT)\\interpret-UPIC"
set disable_garbage_collection False
set description "Approach-avoidance conflict task"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#000000"

define inline_javascript Set_up_sound
	set description "Executes Python code"
	___run__
	const AudioContext = window.AudioContext || window.webkitAudioContext;
	if (!AudioContext) {
	    console.error('Web Audio API is not supported in this browser');
	}
	
	const audio_context = new AudioContext();
	let source = null;
	
	if (navigator.audioSession) {
	  try {
	    navigator.audioSession.type = "playback";
	  } catch (error) {
	    console.error('Could not set audio session type:', error);
	  }
	}
	
	function playSound(sound) {
	    if (!sound) {
	        console.error('Sound file not loaded properly');
	        return;
	    }
	
	    // Stop the currently playing sound if any
	    if (source) {
	        source.stop();
	    }
	    
	    source = audio_context.createBufferSource(); 
	    source.buffer = sound;
	    source.connect(audio_context.destination);
	    source.start(0);
	}
	
	// Stop the currently playing sound if any
	function stopSound() {
	    if (source) {
	        source.stop();
	        source = null;
	    }
	}
	__end__
	set _prepare ""

define feedback aversive_stimuli
	set reset_variables yes
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="{img}" scale=0.6 show_if=True x=0 y=0 z_index=0

define inline_javascript aversive_stimuli_javascript
	set description "Executes Python code"
	___run__
	// Take the first integer from the aversive stimuli array and remove it
	imgNumber = randomStimuliA.shift();
	// Build the image name string for aversive stimuli
	img = 'aversive_' + imgNumber.toString() + '.jpg';
	
	// Add the first integer from randomPointsArray to the score
	score += randomPointsArray[0];
	pointsEarnd = randomPointsArray[0];
	
	// Remove the first integer from the randomPointsArray
	randomPointsArray.shift();
	
	// Define the sound file path
	sound = pool["aversive_sound.mp3"].data;
	vars.soundFile = 'aversive_sound.mp3'
	
	// Play sound
	playSound(sound) 
	__end__
	set _prepare ""

define inline_javascript aversive_stimuli_javascript_practice
	set description "Executes Python code"
	___run__
	// Take the first integer from the aversive stimuli array and remove it
	vars.imgNumber_practice = randomStimuliA.shift();
	
	// Build the image name string for aversive stimuli
	vars.img_practice = 'aversive_' + imgNumber_practice.toString() + '.jpg';
	
	// Add the first integer from randomPointsArray to the score
	vars.score_practice += randomPointsArray[0];
	vars.pointsEarnd_practice = randomPointsArray[0];
	
	// Remove the first integer from the randomPointsArray
	randomPointsArray.shift();
	
	// Define the sound file path
	sound = pool["aversive_sound.mp3"].data;
	vars.soundFile = 'aversive_sound.mp3'
	
	// Play sound
	playSound(sound) 
	__end__
	set _prepare ""

define feedback aversive_stimuli_practice
	set reset_variables yes
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="{img_practice}" scale=0.6 show_if=True x=0 y=0 z_index=0

define sketchpad blank
	set duration 10
	set description "Displays stimuli"

define feedback feedback
	set reset_variables yes
	set duration 1500
	set description "Provides feedback to the participant"
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=True text="Du vann {pointsEarnd} poäng<br />Totalt: {score}" x=0 y=0 z_index=0

define feedback feedback_practice
	set reset_variables yes
	set duration 1500
	set description "Provides feedback to the participant"
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=True text="Du vann {pointsEarnd_practice} poäng<br />Totalt: {score_practice}" x=0 y=0 z_index=0

define feedback final_score
	set reset_variables yes
	set duration 5000
	set description "Provides feedback to the participant"
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=True text="Nu är den här uppgiften färdig.<br />Din totala poäng { score }.<br />Dina svar håller på att sparas.<br />Stäng inte webbläsaren och vänta<br />tills du blivit skickad till nästa sida." x=0 y=0 z_index=0

define sequence instructions
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Set_up_sound True
	run set_pleasant_volume True
	run set_unpleasant_volume True
	run instructions_for_the_game_1 True
	run new_1_loop True
	run instructions_for_the_game_2 True
	run new_2_loop True
	run instructions_for_the_game_3 True
	run new_3_loop True
	run instructions_for_the_game_4 True
	run new_4_loop True
	run instructions_for_the_game_5 True
	run new_5_loop True

define sketchpad instructions_for_the_game_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="I det här spelet kan du samla poäng. Du kommer upprepade<br />gånger att få se en dödskalle och en smiley på skärmen som du<br />ska välja mellan. Det gör du genom att klicka på dödskallen eller<br />smileyn. Du har 7 sekunder på dig att välja mellan bilderna.<br /><br />" x=0 y=-192 z_index=0
	draw image center=1 file="neutral_choice.jpg" scale=1.5 show_if=True x=-192 y=96 z_index=0
	draw image center=1 file="aversive_choice.jpg" scale=1.5 show_if=True x=192 y=96 z_index=0
	draw image center=1 file="continue.jpg" scale=1.1 show_if=True x=0 y=320 z_index=0

define sketchpad instructions_for_the_game_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Ovanför varje bild står den poäng du får om du väljer den bilden.<br />Poängen kan vara 0, 1, 5 och 20.<br />" x=0 y=-192 z_index=0
	draw image center=1 file="neutral_choice.jpg" scale=1.5 show_if=True x=-192 y=96 z_index=0
	draw image center=1 file="aversive_choice.jpg" scale=1.5 show_if=True x=192 y=96 z_index=0
	draw image center=1 file="continue.jpg" scale=1.1 show_if=True x=0 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text=5 x=192 y=-64 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text=0 x=-192 y=-64 z_index=0

define sketchpad instructions_for_the_game_3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="När du valt kommer du att få se ytterligare en bild och höra ett<br />ljud. Om du väljer dödskallen kommer du att få se en obehaglig<br />bild och höra ett obehagligt ljud. Om du väljer smileyn kommer<br />du att få se en neutral bild och höra ett neutralt ljud." x=0 y=-192 z_index=0
	draw image center=1 file="neutral_choice.jpg" scale=1.5 show_if=True x=-192 y=96 z_index=0
	draw image center=1 file="aversive_choice.jpg" scale=1.5 show_if=True x=192 y=96 z_index=0
	draw image center=1 file="continue.jpg" scale=1.1 show_if=True x=0 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text=5 x=192 y=-64 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=True text=0 x=-192 y=-64 z_index=0

define sketchpad instructions_for_the_game_4
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Inför varje val kommer du att få svara på två frågor om hur gärna<br />du vill ha poängen och hur mycket obehag du tror att den<br />obehagliga bilden+ljudet kommer att väcka om du väljer den.<br />Efter varje val kommer du få svara på hur du<br />upplevde bilden/ljudet. Du svarar genom att klicka på<br />respektive siffra/text.<br />" x=0 y=-128 z_index=0
	draw image center=1 file="continue.jpg" scale=1.1 show_if=True x=0 y=320 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-384 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4000000000000004 show_if=True x=-256 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4000000000000004 show_if=True x=-128 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4000000000000004 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4000000000000004 show_if=True x=128 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4000000000000004 show_if=True x=256 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4000000000000004 show_if=True x=384 y=96 z_index=0

define sketchpad instructions_for_the_game_5
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Uppgiften tar ca. 5 minuter. Vi kommer först att ha<br />en träningsrunda för att se till att instruktionerna<br />är tydliga och att du förstår spelet.<br /><br />Klicka på knappen nedan för att starta uppgiften.<br />Håll uppmärksamheten på skärmen hela tiden!<br />" x=0 y=0 z_index=0
	draw image center=1 file="continue.jpg" scale=1.1 show_if=True x=0 y=320 z_index=0

define logger logger_practice
	set description "Logs experimental data"
	set auto_log yes
	log img
	log correct_touch_response
	log pointsEarnd
	log response
	log time_neutral_sound
	log time_aversive_sound
	log response_time

define feedback neutral_stimuli
	set reset_variables yes
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="{img}" scale=0.6 show_if=True x=0 y=0 z_index=0

define inline_javascript neutral_stimuli_javascript
	set description "Executes Python code"
	___run__
	// Take the first integer from the neutral stimuli array and remove it
	imgNumber = randomStimuliN.shift()
	
	// Build the image name string for neutral stimuli
	img = 'neutral_' + imgNumber.toString() + '.jpg';
	
	// For non-aversive responses, no points are earned
	pointsEarnd = 0;
	
	// Remove the first integer from the randomPointsArray
	randomPointsArray.shift();
	
	// Define the sound file path
	sound = pool["neutral_sound.mp3"].data;
	vars.soundFile = 'neutral_sound.mp3'
	
	// Play sound
	playSound(sound) 
	__end__
	set _prepare ""

define inline_javascript neutral_stimuli_javascript_practice
	set description "Executes Python code"
	___run__
	// Take the first integer from the neutral stimuli array and remove it
	vars.imgNumber_practice = randomStimuliN.shift()
	
	// Build the image name string for neutral stimuli
	vars.img_practice = 'neutral_' + imgNumber_practice.toString() + '.jpg';
	
	// For non-aversive responses, no points are earned
	vars.pointsEarnd_practice = 0;
	
	// Remove the first integer from the randomPointsArray
	randomPointsArray.shift();
	
	// Define the sound file path
	sound = pool["neutral_sound.mp3"].data;
	vars.soundFile = 'neutral_sound.mp3'
	
	// Play sound
	playSound(sound) 
	__end__
	set _prepare ""

define feedback neutral_stimuli_practice
	set reset_variables yes
	set duration 3000
	set description "Displays stimuli"
	draw image center=1 file="{img_practice}" scale=0.6 show_if=True x=0 y=0 z_index=0

define touch_response new_10_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 4
	set _ncol 7

define loop new_11_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_11_sequence

define sequence new_11_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_10_touch_response True
	run repeatCycle_practice True

define touch_response new_11_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 4
	set _ncol 7

define loop new_12_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_12_sequence

define sequence new_12_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_11_touch_response True
	run new_5_inline_javascript True

define loop new_13_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_13_sequence

define sequence new_13_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_13_touch_response True
	run new_8_inline_javascript True

define touch_response new_13_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 4
	set _ncol 7

define sequence new_14_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run point_timeout_init_practice True
	run rateReward_practice True
	run new_11_loop True
	run rateAversive_practice True
	run new_12_loop True
	run stimuli_practice True
	run touche_response_practice True
	run neutral_stimuli_javascript_practice "correct == 0"
	run aversive_stimuli_javascript_practice "correct == 1"
	run neutral_stimuli_practice "correct == 0"
	run aversive_stimuli_practice "correct == 1"
	run rateDiscomfort_practice True
	run new_13_loop True
	run feedback_practice True
	run logger_practice True

define inline_javascript new_1_inline_javascript
	set description "Executes Python code"
	___run__
	if (buttonsGridPos.includes(response)) {
	    repeat_cycle  = 0;
	    vars.rateAversive = response;
	}
	else {
	    repeat_cycle  = 1;
	}
	__end__
	set _prepare "vars.buttonsGridPos = [15,16,17,18,19,20,21]"

define loop new_1_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_7_sequence

define repeat_cycle new_1_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 38"

define sequence new_1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_6_touch_response True
	run new_6_repeat_cycle True

define touch_response new_1_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 8
	set _ncol 5

define inline_javascript new_2_inline_javascript
	set description "Executes Python code"
	___run__
	if (buttonsGridPos.includes(response)) {
	    repeat_cycle  = 0;
	    vars.rateDiscomfort = response;
	}
	else {
	    repeat_cycle  = 1;
	}
	__end__
	set _prepare "vars.buttonsGridPos = [15,16,17,18,19,20,21]"

define loop new_2_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_8_sequence

define repeat_cycle new_2_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 38"

define sequence new_2_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_7_touch_response True
	run repeatCycle True

define touch_response new_2_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 8
	set _ncol 5

define loop new_3_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_9_sequence

define repeat_cycle new_3_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 38"

define sequence new_3_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_8_touch_response True
	run new_1_inline_javascript True

define touch_response new_3_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 8
	set _ncol 5

define loop new_4_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_1_sequence

define repeat_cycle new_4_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 38"

define sequence new_4_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_9_touch_response True
	run new_2_inline_javascript True

define touch_response new_4_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 8
	set _ncol 5

define inline_javascript new_5_inline_javascript
	set description "Executes Python code"
	___run__
	if (buttonsGridPos.includes(response)) {
	    repeat_cycle  = 0;
	    vars.rateAversive_practice = response;
	}
	else {
	    repeat_cycle  = 1;
	}
	__end__
	set _prepare "vars.buttonsGridPos = [15,16,17,18,19,20,21]"

define loop new_5_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_5_sequence

define repeat_cycle new_5_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 38"

define sequence new_5_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_1_touch_response True
	run new_1_repeat_cycle True

define touch_response new_5_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 8
	set _ncol 5

define loop new_6_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_2_sequence

define repeat_cycle new_6_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 38"

define sequence new_6_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_2_touch_response True
	run new_2_repeat_cycle True

define touch_response new_6_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 8
	set _ncol 5

define loop new_7_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_3_sequence

define sequence new_7_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_3_touch_response True
	run new_3_repeat_cycle True

define touch_response new_7_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 4
	set _ncol 7

define inline_javascript new_8_inline_javascript
	set description "Executes Python code"
	___run__
	if (buttonsGridPos.includes(response)) {
	    repeat_cycle  = 0;
	    vars.rateDiscomfort_practice = response;
	}
	else {
	    repeat_cycle  = 1;
	}
	__end__
	set _prepare "vars.buttonsGridPos = [15,16,17,18,19,20,21]"

define loop new_8_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_4_sequence

define sequence new_8_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_4_touch_response True
	run new_4_repeat_cycle True

define touch_response new_8_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 4
	set _ncol 7

define loop new_9_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run new_6_sequence

define sequence new_9_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_5_touch_response True
	run new_5_repeat_cycle True

define touch_response new_9_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 4
	set _ncol 7

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes
	log img
	log correct_touch_response
	log pointsEarnd
	log response
	log time_neutral_sound
	log time_aversive_sound
	log response_time

define inline_javascript point_timeout_init
	set description "Executes Python code"
	set _run ""
	___prepare__
	vars.aversive_points = randomPointsArray[0];
	__end__

define inline_javascript point_timeout_init_practice
	set description "Executes Python code"
	set _run ""
	___prepare__
	vars.aversive_points_practice = randomPointsArray[0];
	__end__

define loop practice_loop
	set source table
	set repeat 1.5
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 left_image aversive_choice
	setcycle 0 right_image neutral_choice
	setcycle 0 aversive_response 1
	setcycle 0 neutral_points_pos 288
	setcycle 0 aversive_points_pos -288
	setcycle 1 left_image neutral_choice
	setcycle 1 right_image aversive_choice
	setcycle 1 aversive_response 2
	setcycle 1 neutral_points_pos -288
	setcycle 1 aversive_points_pos 288
	run new_14_sequence

define sketchpad rateAversive
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Hur obehaglig tror du att den obehagliga bilden+ljudet<br />kommer att vara?" x=0 y=-128 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-424 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4 show_if=True x=-280 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4 show_if=True x=-138 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4 show_if=True x=138 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4 show_if=True x=280 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4 show_if=True x=424 y=96 z_index=0

define sketchpad rateAversive_practice
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Hur obehaglig tror du att den obehagliga bilden+ljudet<br />kommer att vara?" x=0 y=-128 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-424 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4 show_if=True x=-280 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4 show_if=True x=-138 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4 show_if=True x=138 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4 show_if=True x=280 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4 show_if=True x=424 y=96 z_index=0

define sketchpad rateDiscomfort
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Hur obehaglig var bilden+ljudet?" x=0 y=-128 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-424 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4 show_if=True x=-280 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4 show_if=True x=-138 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4 show_if=True x=138 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4 show_if=True x=280 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4 show_if=True x=424 y=96 z_index=0

define sketchpad rateDiscomfort_practice
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Hur obehaglig var bilden+ljudet?" x=0 y=-128 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-424 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4 show_if=True x=-280 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4 show_if=True x=-138 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4 show_if=True x=138 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4 show_if=True x=280 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4 show_if=True x=424 y=96 z_index=0

define feedback rateReward
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="I nästa omgång kan du få {aversive_points} poäng,<br />hur gärna vill du ha poängen?" x=0 y=-128 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-424 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4 show_if=True x=-280 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4 show_if=True x=-138 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4 show_if=True x=138 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4 show_if=True x=280 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4 show_if=True x=424 y=96 z_index=0

define feedback rateReward_practice
	set reset_variables yes
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="I nästa omgång kan du få {aversive_points_practice} poäng,<br />hur gärna vill du ha poängen?" x=0 y=-128 z_index=0
	draw image center=1 file="rating1.png" scale=1.4 show_if=True x=-424 y=96 z_index=0
	draw image center=1 file="rating2.png" scale=1.4 show_if=True x=-280 y=96 z_index=0
	draw image center=1 file="rating3.png" scale=1.4 show_if=True x=-138 y=96 z_index=0
	draw image center=1 file="rating4.png" scale=1.4 show_if=True x=0 y=96 z_index=0
	draw image center=1 file="rating5.png" scale=1.4 show_if=True x=138 y=96 z_index=0
	draw image center=1 file="rating6.png" scale=1.4 show_if=True x=280 y=96 z_index=0
	draw image center=1 file="rating7.png" scale=1.4 show_if=True x=424 y=96 z_index=0

define inline_javascript repeatCycle
	set description "Executes Python code"
	___run__
	if (buttonsGridPos.includes(response)) {
	    repeat_cycle  = 0;
	    vars.rateReward = response;
	}
	else {
	    repeat_cycle  = 1;
	}
	__end__
	set _prepare "vars.buttonsGridPos = [15,16,17,18,19,20,21]"

define inline_javascript repeatCycle_practice
	set description "Executes Python code"
	___run__
	if (buttonsGridPos.includes(response)) {
	    repeat_cycle  = 0;
	    vars.rateReward_practice = response;
	}
	else {
	    repeat_cycle  = 1;
	}
	__end__
	set _prepare "vars.buttonsGridPos = [15,16,17,18,19,20,21]"

define inline_html set_pleasant_volume
	__html__
	<!DOCTYPE html>
	<html>
	  <head>
	    <style>      
	      body {
	        background-color: black;
	        color: white;
	      }
	      
	      p {
	        font-family: Arial, Helvetica, sans-serif;
	        max-width: 1000px;
	        font-size: 30px;
	        margin: 0px 0px 10px 0px;
	      }
	      
	      .page-container {
	        position: absolute;
	        top: 8%;
	        left: 50%;
	        transform: translate(-50%, 0);
	        text-align: center;
	      }
	      
	      .title {
	        font-size: 35px;
	        margin-bottom: 20px;
	        text-decoration: underline;
	      }
	      
	      .continue-button {
	        width: 150px; 
	        height: 50px;
	        margin-top: 20px;
	        font-size: 25px;
	        border-style: none;
	        background-color: rgb(153,0,0);
	        color: rgb(230,230,230);
	        border-radius: 5px;
	        cursor: pointer;
	        transition: background-color 0.15s;
	      }
	
	      .play-button {
	        width: 150px; 
	        height: 80px;
	        margin-top: 10px;
	        margin-bottom: 10px;
	        font-size: 25px;
	        border-style: none;
	        background-color: rgb(153,0,0);
	        color: rgb(230,230,230);
	        border-radius: 5px;
	        cursor: pointer;
	        transition: background-color 0.15s;
	      }
	      
	      .continue-button:hover, .play-button:hover {
	        background-color: rgb(190, 0, 0);
	      }
	
	      /* Phone vertical */
	      @media (max-width: 450px) {
	
	        p {
	          font-size: 16px;
	        }
	
	        .title {
	          font-size: 25px;
	        }
	        
	        .continue-button {
	          width: 110px; 
	          height: 35px;
	          font-size: 20px;
	        }
	        
	         .play-button {
	          width: 110px; 
	          height: 50px;
	          font-size: 16px;
	         }
	      }
	
	      @media (min-width: 451px) and (max-width: 900px) {
	        
	        p {
	          font-size: 16px;
	        }
	
	        .title {
	          font-size: 25px;
	        }
	        
	        .continue-button {
	          width: 110px; 
	          height: 35px;
	          font-size: 20px;
	        }
	        
	        .play-button {
	          width: 110px; 
	          height: 50px;
	          font-size: 16px;
	         }
	      }
	
	      @media (min-width: 900px) and (max-width: 1300px) {
	        
	        p {
	          font-size: 25px;
	        }
	
	        .title {
	          font-size: 30px;
	        }
	        
	        .continue-button {
	          width: 160px; 
	          height: 50px;
	          font-size: 26px;
	        }
	      }
	
	      @media (max-height: 500px) {
	        .page-container {
	        top: 2%;
	        }
	      }
	    </style>
	  </head>
	  <body>
	    <div class="page-container">
	      <p class="title">Ställ in behaglig volym</p>
	      <p>
	        Nu ska du ställa in ljudet så det är en behaglig lyssningsnivå. Lyssna på berättelsen och ändra volymen tills du hittar en lagom nivå. Ange volymen genom att dra slidern längst ner på sidan.
	      </p>
	      <button id="play_sound" onclick="playSound(sound);" class="play-button">Spela upp ljud</button>
	      <p>
	        I vissa webbläsare finns en liten volymkontroll på ljudspelaren där du kan ställa in volymen. Om du ser en sådan volymkontroll ska den vara inställd på max. Det är volymen direkt i datorn/surfplattan/telefonen du ska ställa in.
	      </p>
	      <p>
	        Ungefär hur hög volym ställde du in?
	      </p>
	      <form id="pleasantVolumeForm">
	          <input type="range" id="pleasantVolume" value="0" min="0" max="100" oninput="this.nextElementSibling.value = this.value">
	          <output>0</output>
	      </form>
	      <div>
	        <input id="continue" class="continue-button" type='submit' name="continue" value='Fortsätt &rarr;'>
	      </div>
	    </div>
	    <script>
	        // Define the sound file path
	        sound = pool["sound_story.mp3"].data;
	
	        document.getElementById("continue").addEventListener("click", function() {
	            stopSound()
	            vars.pleasantVolume = document.getElementById("pleasantVolume").value;
	        });
	    </script>
	  </body>
	</html>
	__end__
	set description "Embeds custom HTML"

define inline_html set_unpleasant_volume
	__html__
	<!DOCTYPE html>
	<html>
	  <head>
	    <style>      
	      body {
	        background-color: black;
	        color: white;
	      }
	      
	      p {
	        font-family: Arial, Helvetica, sans-serif;
	        max-width: 1000px;
	        font-size: 30px;
	        margin: 0px 0px 10px 0px;
	      }
	      
	      .page-container {
	        position: absolute;
	        top: 8%;
	        left: 50%;
	        transform: translate(-50%, 0);
	        text-align: center;
	      }
	      
	      .title {
	        font-size: 35px;
	        margin-bottom: 20px;
	        text-decoration: underline;
	      }
	      
	      .continue-button {
	        width: 150px; 
	        height: 50px;
	        margin-top: 20px;
	        font-size: 25px;
	        border-style: none;
	        background-color: rgb(153,0,0);
	        color: rgb(230,230,230);
	        border-radius: 5px;
	        cursor: pointer;
	        transition: background-color 0.15s;
	      }
	
	      .play-button {
	        width: 150px; 
	        height: 80px;
	        margin-top: 10px;
	        margin-bottom: 10px;
	        font-size: 25px;
	        border-style: none;
	        background-color: rgb(153,0,0);
	        color: rgb(230,230,230);
	        border-radius: 5px;
	        cursor: pointer;
	        transition: background-color 0.15s;
	      }
	      
	      .continue-button:hover, .play-button:hover {
	        background-color: rgb(190, 0, 0);
	      }
	
	      /* Phone vertical */
	      @media (max-width: 450px) {
	
	        p {
	          font-size: 16px;
	        }
	
	        .title {
	          font-size: 25px;
	        }
	        
	        .continue-button {
	          width: 110px; 
	          height: 35px;
	          font-size: 20px;
	        }
	        
	         .play-button {
	          width: 110px; 
	          height: 50px;
	          font-size: 16px;
	         }
	      }
	
	      @media (min-width: 451px) and (max-width: 900px) {
	        
	        p {
	          font-size: 16px;
	        }
	
	        .title {
	          font-size: 25px;
	        }
	        
	        .continue-button {
	          width: 110px; 
	          height: 35px;
	          font-size: 20px;
	        }
	        
	        .play-button {
	          width: 110px; 
	          height: 50px;
	          font-size: 16px;
	         }
	      }
	
	      @media (min-width: 900px) and (max-width: 1300px) {
	        
	        p {
	          font-size: 25px;
	        }
	
	        .title {
	          font-size: 30px;
	        }
	        
	        .continue-button {
	          width: 160px; 
	          height: 50px;
	          font-size: 26px;
	        }
	      }
	
	      @media (max-height: 500px) {
	        .page-container {
	        top: 2%;
	        }
	      }
	    </style>
	  </head>
	  <body>
	    <div class="page-container">
	      <p class="title">Ställ in obehaglig volym</p>
	      <p>
	        Nu ska du ställa in ljudet så det är lagom obehagligt. Spela upp ljudet och ändra volymen tills du hittar en nivå du tror är bra. Försök att hitta en nivå som du upplever som klart obehaglig men ändå uthärdlig. Meningen är att experimentet ska ge ett visst obehag, men ställ inte in det så högt att du inte klarar av att fullfölja experimentet eller så att du skadar din hörsel.
	      </p>
	      <button id="play_sound" onclick="playSound(sound);" class="play-button">Spela upp ljud</button>
	      <p>
	          När du väl har bestämt dig för en ljud-nivå bör du inte ändra den under experimentets gång.
	      </p>
	      <p>
	        Ungefär hur hög volym ställde du in?
	      </p>
	      <form id="pleasantVolumeForm">
	          <input type="range" id="unpleasantVolume" value="0" min="0" max="100" oninput="this.nextElementSibling.value = this.value">
	          <output>0</output>
	      </form>
	      <div>
	        <input id="continue" class="continue-button" type='submit' name="continue" value='Fortsätt &rarr;'>
	      </div>
	    </div>
	    <script>
	        // Define the sound file path
	        sound = pool['sound_test.mp3'].data;
	
	        document.getElementById("continue").addEventListener("click", function() {
	          stopSound()
	          vars.unpleasantVolume = document.getElementById("unpleasantVolume").value;
	        });
	    </script>
	  </body>
	</html>
	__end__
	set description "Embeds custom HTML"

define inline_javascript set_up_practice
	set description "Executes Python code"
	___run__
	// Initialize the total score to 0
	vars.score_practice = 0;
	
	// Initialize the points earned from an individual choice to 0
	vars.pointsEarned_practice = 0;
	
	// Arrays containing integers corresponding to the file names of stimuli
	stimuliN = ['1B','2B','3B'];
	stimuliA = ['1B','2B','3B'];
	
	// Shuffle the order of stimuli arrays
	randomStimuliN = shuffleArray([...stimuliN]);
	randomStimuliA = shuffleArray([...stimuliA]);
	
	// Define an array of possible points for choices
	points = [0, 1, 5, 20];
	
	// Create an array to store shuffled points, repeated 4 times for a total length of 16
	vars.randomPointsArray = [];
	
	for (let i = 0; i < 4; i++) {
	  const shuffledPoints = shuffleArray([...points]);
	  randomPointsArray.push(...shuffledPoints);
	}
	
	// Define an array for fixation cross time-outs with intervals of 100ms
	var fixationCrossTimeOut = [3000,3100,3200,3300,3400,3500,3600,3700,3800,3900,4000];
	
	// Function to shuffle an array using the Fisher-Yates algorithm
	function shuffleArray(array) {
	  // Copy the input array to avoid modifying the original array
	  const shuffled = [...array];
	  for (let i = shuffled.length - 1; i > 0; i--) {
	    const j = Math.floor(Math.random() * (i + 1));
	    [shuffled[i], shuffled[j]] = [shuffled[j], shuffled[i]]; // Swap elements
	  }
	  return shuffled;
	}
	__end__
	set _prepare ""

define inline_javascript set_up_trials
	set description "Executes Python code"
	___run__
	// Initialize the total score to 0
	vars.score = 0;
	
	// Initialize the points earned from an individual choice to 0
	vars.pointsEarned = 0;
	
	// Arrays containing integers corresponding to the file names of stimuli
	stimuliN = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16];
	stimuliA = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16];
	
	// Shuffle the order of stimuli arrays
	randomStimuliN = shuffleArray([...stimuliN]);
	randomStimuliA = shuffleArray([...stimuliA]);
	
	// Define an array of possible points for choices
	points = [0, 1, 5, 20];
	
	// Create an array to store shuffled points, repeated 4 times for a total length of 16
	vars.randomPointsArray = [];
	
	for (let i = 0; i < 4; i++) {
	  const shuffledPoints = shuffleArray([...points]);
	  randomPointsArray.push(...shuffledPoints);
	}
	
	// Define an array for fixation cross time-outs with intervals of 100ms
	fixationCrossTimeOut = [3000,3100,3200,3300,3400,3500,3600,3700,3800,3900,4000];
	
	// Function to shuffle an array using the Fisher-Yates algorithm
	function shuffleArray(array) {
	  // Copy the input array to avoid modifying the original array
	  const shuffled = [...array];
	  for (let i = shuffled.length - 1; i > 0; i--) {
	    const j = Math.floor(Math.random() * (i + 1));
	    [shuffled[i], shuffled[j]] = [shuffled[j], shuffled[i]]; // Swap elements
	  }
	  return shuffled;
	}
	__end__
	set _prepare ""

define sketchpad start_the_task
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=True text="Nu är träningsomgången klar och vi går vidare till spelet.<br />Klicka på knappen när du är redo att börja." x=0 y=0 z_index=0
	draw image center=1 file="continue.jpg" scale=1.1 show_if=True x=0 y=320 z_index=0

define sketchpad stimuli
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{left_image}.jpg" name="{left_image}" scale=2 show_if=True x=-288 y=0 z_index=0
	draw image center=1 file="{right_image}.jpg" name="{right_image}" scale=2 show_if=True x=288 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=True text=0 x="{neutral_points_pos}" y=-224 z_index=0
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=True text="{aversive_points}" x="{aversive_points_pos}" y=-224 z_index=0

define loop stimuli_loop
	set source table
	set repeat 8
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 left_image aversive_choice
	setcycle 0 right_image neutral_choice
	setcycle 0 aversive_response 1
	setcycle 0 neutral_points_pos 288
	setcycle 0 aversive_points_pos -288
	setcycle 1 left_image neutral_choice
	setcycle 1 right_image aversive_choice
	setcycle 1 aversive_response 2
	setcycle 1 neutral_points_pos -288
	setcycle 1 aversive_points_pos 288
	run trial_sequence

define sketchpad stimuli_practice
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{left_image}.jpg" name="{left_image}" scale=2 show_if=True x=-288 y=0 z_index=0
	draw image center=1 file="{right_image}.jpg" name="{right_image}" scale=2 show_if=True x=288 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=True text=0 x="{neutral_points_pos}" y=-224 z_index=0
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=36 html=yes show_if=True text="{aversive_points_practice}" x="{aversive_points_pos}" y=-224 z_index=0

define sequence task_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run urlQueryParameters True
	run blank True
	run instructions True
	run set_up_practice True
	run practice_loop True
	run start_the_task True
	run new_9_loop True
	run set_up_trials True
	run stimuli_loop True
	run final_score True

define touch_response touch_response
	set timeout 7000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set correct_response "{aversive_response}"
	set _nrow 1
	set _ncol 2

define touch_response touche_response_practice
	set timeout 7000
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set correct_response "{aversive_response}"
	set _nrow 1
	set _ncol 2

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run point_timeout_init True
	run rateReward True
	run new_6_loop True
	run rateAversive True
	run new_7_loop True
	run stimuli True
	run touch_response True
	run neutral_stimuli_javascript "correct == 0"
	run aversive_stimuli_javascript "correct == 1"
	run neutral_stimuli "correct == 0"
	run aversive_stimuli "correct == 1"
	run rateDiscomfort True
	run new_8_loop True
	run feedback True
	run new_logger True

define inline_javascript urlQueryParameters
	set description "Executes Python code"
	set _run ""
	set _prepare "vars.ID = jatos.urlQueryParameters.pid;"

